# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: AlazarTech Digitizer

# The version string should be updated whenever changes are made to this config file
version: 0.0

# Default interface
interface: Other
address: 1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: AlazarTech_Digitizer

[Model and options]
# The option section allow instruments with different options to use the same driver

# List of models supported by this driver
model_str_1: 9870
model_str_2: 9373
model_str_3: 9360

#Check instrument model id at startup
check_model: True


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
[Pre-trig samples]
datatype: DOUBLE
def_value: 0
show_in_measurement_dlg: True
model_value_1: 9870
group: Acquisition

[Post-trig samples]
datatype: DOUBLE
def_value: 1000
low_lim: 256
group: Acquisition

[Number of records]
datatype: DOUBLE
def_value: 1
show_in_measurement_dlg: True
group: Acquisition

[Sequence mode]
datatype: BOOLEAN
def_value: False
show_in_measurement_dlg: True
group: Sequence mode

[Number of sequences]
datatype: DOUBLE
def_value: 1
low_lim: 1
state_quant: Sequence mode
state_value_1: True
group: Sequence mode

[Number of averages]
datatype: DOUBLE
def_value: 1
low_lim: 1
state_quant: Sequence mode
state_value_1: True
group: Sequence mode

[Clock source]
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: 10 MHz Reference
cmd_def_1: 1
cmd_def_2: 7
group: Timebase

[Sample rate]
datatype: COMBO
def_value: 1 GS/s
combo_def_1: 1 kS/s
combo_def_2: 2 kS/s
combo_def_3: 5 kS/s
combo_def_4: 10 kS/s
combo_def_5: 20 kS/s
combo_def_6: 50 kS/s
combo_def_7: 100 kS/s
combo_def_8: 200 kS/s
combo_def_9: 500 kS/s
combo_def_10: 1 MS/s
combo_def_11: 2 MS/s
combo_def_12: 5 MS/s
combo_def_13: 10 MS/s
combo_def_14: 20 MS/s
combo_def_15: 50 MS/s
combo_def_16: 100 MS/s
combo_def_17: 200 MS/s
combo_def_18: 500 MS/s
combo_def_19: 1 GS/s
combo_def_20: 1.2 GS/s
combo_def_21: 1.5 GS/s
combo_def_22: 2 GS/s
; combo_def_23: 2.4 GS/s
; combo_def_24: 3 GS/s
; combo_def_25: 3.6 GS/s
; combo_def_26: 4 GS/s
cmd_def_1: 0x00000001
cmd_def_2: 0x00000002
cmd_def_3: 0x00000004
cmd_def_4: 0x00000008
cmd_def_5: 0x0000000A
cmd_def_6: 0x0000000C
cmd_def_7: 0x0000000E
cmd_def_8: 0x00000010
cmd_def_9: 0x00000012
cmd_def_10: 0x00000014
cmd_def_11: 0x00000018
cmd_def_12: 0x0000001A
cmd_def_13: 0x0000001C
cmd_def_14: 0x0000001E
cmd_def_15: 0x00000022
cmd_def_16: 0x00000024
cmd_def_17: 0x00000028
cmd_def_18: 0x00000030
cmd_def_19: 0x00000035
cmd_def_20: 0x00000037
cmd_def_21: 0x0000003A
cmd_def_22: 0x0000003F
; cmd_def_23: 0x0000006A
; cmd_def_24: 0x00000075
; cmd_def_25: 0x0000007B
; cmd_def_26: 0x00000080
group: Timebase

[Trig source]
datatype: COMBO
def_value: Immediate
combo_def_1: Channel 1
combo_def_2: Channel 2
combo_def_3: External
combo_def_4: Immediate
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
group: Trigger

[Trig coupling]
datatype: COMBO
def_value: DC
combo_def_1: DC
combo_def_2: AC
cmd_def_1: 2
cmd_def_2: 1
state_quant: Trig source
model_value_1: 9870
state_value_1: External
group: Trigger

[Trig slope]
datatype: COMBO
def_value: Positive
combo_def_1: Positive
combo_def_2: Negative
cmd_def_1: 1
cmd_def_2: 2
group: Trigger

[Trig level]
datatype: DOUBLE
def_value: 0.0
unit: V
group: Trigger

[Trig delay]
datatype: DOUBLE
def_value: 0.0
low_lim: 0.0
unit: s
group: Trigger


[Ch1 - Enabled]
label: Enabled
datatype: BOOLEAN
def_value: True
group: Channel 1
section: Channels

[Ch1 - Range]
label: Range
datatype: COMBO
def_value: 400 mV
combo_def_1: 4 V
combo_def_2: 2 V
combo_def_3: 1 V
combo_def_4: 400 mV
combo_def_5: 200 mV
combo_def_6: 100 mV
combo_def_7: 40 mV
cmd_def_1: 12
cmd_def_2: 11
cmd_def_3: 10
cmd_def_4: 7
cmd_def_5: 6
cmd_def_6: 5
cmd_def_7: 2
model_value_1: 9870
group: Channel 1
section: Channels

[Ch1 - Coupling]
label: Coupling
datatype: COMBO
def_value: DC
combo_def_1: DC
combo_def_2: AC
cmd_def_1: 2
cmd_def_2: 1
model_value_1: 9870
group: Channel 1
section: Channels

[Ch1 - Impedance]
label: Impedance
datatype: COMBO
def_value: 50 Ohm
combo_def_1: 50 Ohm
cmd_def_1: 2
model_value_1: 9870
group: Channel 1
section: Channels

[Ch1 - Bandwidth limit]
label: Bandwidth limit
datatype: BOOLEAN
def_value: True
model_value_1: 9870
group: Channel 1
section: Channels

[Ch2 - Enabled]
label: Enabled
datatype: BOOLEAN
def_value: True
group: Channel 2
section: Channels

[Ch2 - Range]
label: Range
datatype: COMBO
def_value: 400 mV
combo_def_1: 4 V
combo_def_2: 2 V
combo_def_3: 1 V
combo_def_4: 400 mV
combo_def_5: 200 mV
combo_def_6: 100 mV
combo_def_7: 40 mV
cmd_def_1: 12
cmd_def_2: 11
cmd_def_3: 10
cmd_def_4: 7
cmd_def_5: 6
cmd_def_6: 5
cmd_def_7: 2
model_value_1: 9870
group: Channel 2
section: Channels

[Ch2 - Coupling]
label: Coupling
datatype: COMBO
def_value: DC
combo_def_1: DC
combo_def_2: AC
cmd_def_1: 2
cmd_def_2: 1
model_value_1: 9870
group: Channel 2
section: Channels

[Ch2 - Impedance]
label: Impedance
datatype: COMBO
def_value: 50 Ohm
combo_def_1: 50 Ohm
cmd_def_1: 2
model_value_1: 9870
group: Channel 2
section: Channels

[Ch2 - Bandwidth limit]
label: Bandwidth limit
datatype: BOOLEAN
def_value: True
model_value_1: 9870
group: Channel 2
section: Channels

[Ch1 - Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Output
show_in_measurement_dlg: True
state_quant: Ch1 - Enabled
state_value_1: True

[Ch2 - Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Output
show_in_measurement_dlg: True
state_quant: Ch2 - Enabled
state_value_1: True

[Enable demodulation]
datatype: BOOLEAN
def_value: False
group: IQ Amplitudes
section: Demodulation

[Modulation frequency]
datatype: DOUBLE
def_value: 100E6
unit: Hz
group: IQ Amplitudes
section: Demodulation
state_quant: Enable demodulation
state_value_1: 1

[Skip start]
datatype: DOUBLE
def_value: 0.0
unit: s
group: IQ Amplitudes
section: Demodulation
state_quant: Enable demodulation
state_value_1: 1

[Length]
datatype: DOUBLE
def_value: 1E-6
unit: s
group: IQ Amplitudes
section: Demodulation
state_quant: Enable demodulation
state_value_1: 1

[Use Ch2 as reference]
datatype: BOOLEAN
def_value: True
group: IQ Amplitudes
section: Demodulation
state_quant: Enable demodulation
state_value_1: 1

[Signal]
datatype: COMPLEX
permission: READ
unit: V
group: IQ Amplitudes
section: Demodulation
state_quant: Enable demodulation
state_value_1: 1

[Signal - Single shot]
datatype: VECTOR_COMPLEX
unit: V
permission: READ
x_name: Repetition
x_unit: 
group: Output
state_quant: Enable demodulation
state_value_1: 1

