# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: PXI Aeroflex 302x Signal Generator

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: PXI_Aeroflex302x

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

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
[Frequency]
name: Frequency
unit: Hz
datatype: DOUBLE
def_value: 5.0E9

[Power]
name: Power
unit: dBm
datatype: DOUBLE
def_value: -120

[Output]
name: Output
datatype: BOOLEAN
def_value: False

[Modulation]
name: Modulation
datatype: COMBO
def_value: CW
combo_def_1: CW
combo_def_2: LVDS
combo_def_3: Arb.
combo_def_4: AM
combo_def_5: FM
combo_def_6: Ext. Analog

[Levelling mode]
name: Levelling mode
datatype: COMBO
def_value: Auto
combo_def_1: Auto
combo_def_2: Frozen
combo_def_3: Peak
combo_def_4: RMS

[Local oscillator VISA]
name: Local oscillator VISA
datatype: STRING
def_value: PXI6::14::INSTR
permission: NONE