# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: PXI Aeroflex 303x Digitizer

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: PXI_Aeroflex303x

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False


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
[RF Frequency]
name: RF Frequency
unit: Hz
datatype: DOUBLE
def_value: 5.0E9
group: Mixer config

[Max input level]
name: Max input level
unit: dBm
datatype: DOUBLE
def_value: 20
group: Mixer config

[Local oscillator VISA]
name: Local oscillator VISA
datatype: STRING
def_value: PXI8::15::INSTR
permission: NONE
group: Mixer config

[Sampling rate]
name: Sampling rate
unit: Hz
datatype: DOUBLE
def_value: 250.0E6
group: Digitizer config

[Number of samples]
name: Number of samples
datatype: DOUBLE
def_value: 2048
group: Digitizer config

[Remove DC offset]
name: Remove DC offset
datatype: BOOLEAN
def_value: True
group: Digitizer config

[Trigger]
name: Trigger
datatype: COMBO
def_value: SW_TRIG
combo_def_1: PXI_TRIG_0
combo_def_2: PXI_TRIG_1
combo_def_3: PXI_TRIG_2
combo_def_4: PXI_TRIG_3
combo_def_5: PXI_TRIG_4
combo_def_6: PXI_TRIG_5
combo_def_7: PXI_TRIG_6
combo_def_8: PXI_TRIG_7
combo_def_9: PXI_STAR
combo_def_10: PXI_LBL_0
combo_def_11: PXI_LBL_1
combo_def_12: PXI_LBL_2
combo_def_13: PXI_LBL_3
combo_def_14: PXI_LBL_4
combo_def_15: PXI_LBL_5
combo_def_16: PXI_LBL_6
combo_def_17: PXI_LBL_7
combo_def_18: PXI_LBL_8
combo_def_19: PXI_LBL_9
combo_def_20: PXI_LBL_10
combo_def_21: PXI_LBL_11
combo_def_22: PXI_LBL_12
combo_def_23: LVDS_MARKER_0
combo_def_24: LVDS_MARKER_1 
combo_def_25: LVDS_MARKER_2
combo_def_26: LVDS_MARKER_3
combo_def_27: LVDS_AUX_0
combo_def_28: LVDS_AUX_1
combo_def_29: LVDS_AUX_2
combo_def_30: LVDS_AUX_3
combo_def_31: LVDS_AUX_4
combo_def_32: LVDS_SPARE_0
combo_def_33: SW_TRIG
combo_def_34: LVDS_MARKER_4
combo_def_35: INT_TIMER
combo_def_36: INT_TRIG 
combo_def_37: FRONT_SMB
group: Digitizer config

[Trace - I]
name: Trace - I
unit: V
datatype: VECTOR
permission: READ
group: Measured signals

[Trace - Q]
name: Trace - Q
unit: V
datatype: VECTOR
permission: READ
group: Measured signals

[Amplitude - I]
name: Amplitude - I
unit: V
datatype: DOUBLE
permission: READ
group: Measured signals

[Amplitude - Q]
name: Amplitude - Q
unit: V
datatype: DOUBLE
permission: READ
group: Measured signals

[Amplitude - R]
name: Amplitude - R
unit: V
datatype: DOUBLE
permission: READ
group: Measured signals

[Signal - theta]
name: Signal - theta
unit: deg
datatype: DOUBLE
permission: READ
group: Measured signals
