# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Signal Demodulation

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: SignalDemodulation

# Flags for defining signal generator or signal analyzer functionality
signal_analyzer: True

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False


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
[Modulation frequency]
datatype: DOUBLE
def_value: 100E6
unit: Hz

[Skip start]
datatype: DOUBLE
def_value: 0.0
unit: s

[Length]
datatype: DOUBLE
def_value: 1E-6
unit: s

[Number of segments]
datatype: DOUBLE
def_value: 1

[Use phase reference signal]
datatype: BOOLEAN
def_value: True

[Input data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
#group: Input

[Reference data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
#group: Input

[Value]
datatype: COMPLEX
permission: READ
unit: V
#group: Output

[Value - Single shot]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
#group: Output
