# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: User Input

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Default interface settings
interface: None
startup: Do nothing

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: UserInput

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
[Set value]
datatype: DOUBLE
tooltip: The measurement will not continue until the user confirms the message box. The setpoint value of the sequence will be saved.
permission: WRITE

[Get value]
datatype: DOUBLE
permission: READ
tooltip: Allow user to enter value

